PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[0.175,0.175,0.175]
  expName = wavetrialexp
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Routines
  Routine WelcomeScreen
    TextComponent textPractice
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome to the experiment.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndScreen
    TextComponent textEnd
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Thank you for participating!
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  Routine imageTrial
    KeyboardComponent keyMorph
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every repeat] = $ImageFile
      mask [set every repeat] = $ImageFile
      opacity = 0
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine MorphInstructions
    TextComponent textInstructions
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        For this task, you will be shown a series of faces and will be asked to determine the racial group that each face belongs to, which will either be Black or White.

        Although some faces will be of mixed-race heritage, please use the racial label that you feel most closely reflects that person's race.

        Press 'space' to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine SecondMorphInstructions
    TextComponent textMorphInstructions2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        For each face, you can either press 'f' for Black or 'j' for White. Try your best to move quickly.

        You will now begin the task.

        Press 'space' to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine trialtext
    TextComponent text
      color = black
      letterHeight = 0.1
      pos = (-0.75, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.00
      text = Black
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  Routine metacog
    SliderComponent confidenceslider
      color = #006400
      forceEndRoutine = True
      granularity = 0
      labels = "Not at all confident","Very confident"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,10,20,30,40,50,60,70,80,80,90,100)
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    TextComponent confidenceText
      letterHeight = 0.06
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = How confident do you feel about that categorization decision?
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    ImageComponent Morphimage_metacog
      image [set every repeat] = $ImageFile
      size = (0.293, 0.4)
      startVal [time (s)] = 0.0
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  Routine fixcross
    PolygonComponent fixationcross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine newimagetrial
    ImageComponent Morphimage
      image [set every repeat] = $ImageFile
      interpolate = nearest
      size = (0.293, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textBlack
      color = black
      letterHeight = 0.1
      pos = (-0.75, 0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = Black
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    TextComponent textWhite
      color = black
      letterHeight = 0.1
      pos = (0.75, 0.45)
      startVal [time (s)] = 0.0
      text = White
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Flow
  Routine WelcomeScreen
  Routine MorphInstructions
  Routine SecondMorphInstructions
  LoopInitiator trialsHypodescent loopType="TrialHandler"
    Selected rows = 0:89
    conditionsFile = trialimagestimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ImageFile': 'Morphed Face Stimuli/UG0.1.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG0.2.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG0.3.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG0.4.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG0.5.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG0.6.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG0.7.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG0.8.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG10.1.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG10.2.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG10.3.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG10.4.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG10.5.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG10.6.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG10.7.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG10.8.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG20.1.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG20.2.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG20.3.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG20.4.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG20.5.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG20.6.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG20.7.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG20.8.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG30.1.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG30.2.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG30.3.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG30.4.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG30.5.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG30.6.jpg'},
      {'ImageFile': 'Morphed Face Stimuli/UG30.7.jpg'}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
    Routine fixcross
    Routine newimagetrial
    Routine metacog
  LoopTerminator trialsHypodescent
  Routine EndScreen
